PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = programowanie_1_ARTYCH
  Units = use prefs
  Screen = 1
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Routines
  Routine instrukcja
    TextComponent instruk
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Witaj.
        Za chwilę zostaniesz poproszony o otwieranie i zamykanie oczu przez dany okres czasu.
        Głos lektora będzie mówił Ci kiedy masz otworzyć, a kiedy zamknąć oczy. Dodatkowa instrukcja będzie wyświetlana na monitorze.
        Postępuj zgodnie z poleceniami. Każda nowa instrukcja będzie poprzedzona dzwonkiem.
        Gdy masz zamknięte oczy, nie otwieraj ich dopóki nie usłyszysz dźwięku dzwonka.
        Aby rozpocząć wciśnij spację
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine podziekowania
    TextComponent text_3
      text = Dziękujemy za udział w badaniu. Aby zakończyć wciśnij spację.
      startVal [time (s)] = 0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine open
    SoundComponent otworz
      sound = open.wav
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
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    TextComponent text
      text = Proszę otworzyć oczy
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    SoundComponent stop
      sound = stop.wav
      stopVal [duration (s)] = 1
      startVal [time (s)] = 60
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  Routine close
    SoundComponent sound_1
      sound = close.wav
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
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    TextComponent text_2
      text = Proszę zamknąć oczy
      stopVal [time (s)] = 60
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    SoundComponent sound_2
      sound = stop.wav
      stopVal [duration (s)] = 1
      startVal [time (s)] = 60
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Flow
  Routine instrukcja
  Routine open
  Routine close
  LoopInitiator rep loopType="TrialHandler"
    random seed = 1
    loopType = random
    nReps = 2
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    Routine close
    Routine open
  LoopTerminator rep
  Routine podziekowania
