PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = programowanie_1_mazurkiewicz
  Units = use prefs
  Screen = 1
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Routines
  Routine instrukcja
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Istrukcja badania

        Prosze nacisnac SPACE
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine koniec
    TextComponent text_4
      text = KONIEC BADANIA
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine open
    SoundComponent sound_1
      sound = open.wav
      volume = 7
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
    TextComponent text_2
      text = Proszę otworzyć oczy
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine close
    SoundComponent sound_2
      sound = close.wav
      volume = 7
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
    TextComponent text_3
      text = Prosze zamknac oczy
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instrukcja
  Routine open
  Routine close
  Routine close
  Routine open
  Routine close
  Routine open
  Routine koniec
