PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-0.545,-0.545,-0.545]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = programowanie_2_ARTYCH
  Units = use prefs
  Screen = 1
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Routines
  Routine instr
    TextComponent text
      color = $[0.004,1.000,1.000]
      startVal [time (s)] = 0.0
      font = Calibri
      letterHeight = 0.1
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      text:
        Za chwilę obejrzysz trzy krótkie filmy z udziałem kotów. Twoim zadaniem jest odpowiedzenie na pytanie czy przedstawiony film wywołał u Ciebie pozytywne emocje - jeśli tak wciśnij klawisz F, natomiast jeśli film nie wywołał u Ciebie pozytywnych emocji wciśnij klawisz J.
        Przed każdym filmem wyświetli się szciosekundowa informacja o tym, że zaraz zacznie się film, aby przyspieszyć odtwarzanie wciśnij spacje.
        Aby rozpocząć wciśnij spacje.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine m
    TextComponent text_6
      color [set every repeat] = $[0.004,1.000,1.000]
      stopVal [duration (s)] = 6.2
      text [set every repeat] = $info
      startVal [time (s)] = 0.2
      font = calibri
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      stopVal [duration (s)] = 6.2
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'space'
      startVal [time (s)] = 0.2
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    TextComponent text_2
      color [set every repeat] = $[1.000,1.000,0.004]
      stopVal [duration (s)] = 0.2
      text [set every repeat] = +
      startVal [time (s)] = 0.0
      font = calibri
      letterHeight = 0.1
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  Routine thx
    TextComponent text_5
      color = $[0.004,1.000,1.000]
      text = Dziękujemy za udział w badaniu
      startVal [time (s)] = 0.0
      font = calibri
      letterHeight = 0.1
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  Routine m1
    TextComponent text_3
      color = $[0.004,1.000,1.000]
      text [set every repeat] = $pyt
      startVal [time (s)] = 6
      font = calibri
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      correctAns = 'f','j'
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'f','j'
      startVal [time (s)] = 6
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    MovieComponent films
      movie [set every repeat] = $f
      stopVal [duration (s)] = 10
      forceEndRoutine = False
      startVal [time (s)] = 0
      backend = opencv
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = koty.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'info': u'Zaraz obejrzysz film numer 1', u'pyt': u'Czy film wywo\u0142a\u0142 u Ciebie pozytywne emocje? \nF(tak) / J (nie)\n\n', u'f': u'f1.avi'},
      {u'info': u'Zaraz obejrzysz film numer 2', u'pyt': u'Czy film wywo\u0142a\u0142 u Ciebie pozytywne emocje? \nF(tak) / J (nie)\n\n', u'f': u'f2.avi'},
      {u'info': u'Zaraz obejrzysz film numer 3', u'pyt': u'Czy film wywo\u0142a\u0142 u Ciebie pozytywne emocje? \nF(tak) / J (nie)\n\n', u'f': u'f3.avi'}]
    Routine m
    Routine m1
  LoopTerminator trials
  Routine thx
