PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = badanie
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_3
      text [set every repeat] = $info
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.2
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 6.2
      image [set every repeat] = $zdjecie
      size = (0.5, 0.5)
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    TextComponent text_4
      text = Czy podoba ci sie to zdjecie?
      stopVal [duration (s)] = 5
      startVal [time (s)] = 6.7
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys [set every repeat] = "f", "j"
      startVal [time (s)] = 11.7
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  Routine Podziekowania
    TextComponent text_5
      text = Dziekuje za udzial w badaniu!
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Instrukcja
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Zaraz wyswietlone zostana obrazki, a zaraz po nich wyswietlac sie beda pytania na ich temat.
        Nalezy udzielic odpowiedzi "tak" lub "nie"
        Jako "tak" odpowiada litera "f" , a jako "nie" litera "j".
        Prosze wcisnac dana litere na klawiaturze komputera.
        'Aby przejsc dalej nacisniij spacje'
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instrukcja
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Zeszyt1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'info': u'zaraz obejrzysz zdjecie nr 1', u'zdjecie': u'zwierzak1.jpg', u'odpowiedz': u't'},
      {u'info': u'zaraz obejrzysz zdjecie nr 3', u'zdjecie': u'zwierzak3.jpg', u'odpowiedz': u'n'},
      {u'info': u'zaraz obejrzysz zdjecie nr 2', u'zdjecie': u'zwierzak2.jpg', u'odpowiedz': None}]
    Routine trial
  LoopTerminator trials
  Routine Podziekowania
