PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Numer osoby badanej'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'Numer osoby badanej': u'', u'P\u0142e\u0107': u'', u'Wiek': u''}
  expName = untitled
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent text_2
      color = black
      text [set every repeat] = $napis
      stopVal [duration (s)] = 1.2
      pos [set every repeat] = $pozycja
      startVal [time (s)] = 0.2
      letterHeight [set every repeat] = 0.1
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    KeyboardComponent respo
      correctAns = $resp
      storeCorrect = True
      stopVal [duration (s)] = 1.2
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'd','f','j','k'
      startVal [time (s)] = 0.2
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    TextComponent text_4
      color [set every repeat] = white
      text [set every repeat] = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instrukcja
    TextComponent text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Za chwilę w różnych miejscach na ekranie będą wyświetlać się słowa oznaczające kierunki (prawo, lewo, góra, dół).
        Twoim zadaniem jest określenie, w którym miejscu na ekranie pojawia się dane słowo:
        jeśli z prawej strony wciśnij K
        jeśli z lewej strony wciśnij F
        jeśli na dole wciśnij D
        jeśli na górze wciśnij J

        Aby rozpocząć naciśnij dowolny klawisz.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine kod
    CodeComponent code
      Begin Experiment:
        msg=''
        msg_color=''
      Begin Routine:
        if respo.corr:
            msg= u"Poprawna odpowiedź"
            msg_color='green'
        else:
            msg= u"Zła odpowiedź"
            msg_color='red'
    TextComponent feedback
      color [set every repeat] = $msg_color
      text [set every repeat] = $msg
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thx
    TextComponent text_3
      color = black
      text = Dziękujemy za udział w badaniu!
      stopVal [duration (s)] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instrukcja
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = lista.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'napis': u'LEWO', u'resp': u'k', u'pozycja': (0.8, 0)},
      {u'napis': u'PRAWO', u'resp': u'k', u'pozycja': (0.8, 0)},
      {u'napis': u'G\xd3RA', u'resp': u'k', u'pozycja': (0.8, 0)},
      {u'napis': u'D\xd3\u0141', u'resp': u'k', u'pozycja': (0.8, 0)},
      {u'napis': u'LEWO', u'resp': u'f', u'pozycja': (-0.8, 0)},
      {u'napis': u'PRAWO', u'resp': u'f', u'pozycja': (-0.8, 0)},
      {u'napis': u'G\xd3RA', u'resp': u'f', u'pozycja': (-0.8, 0)},
      {u'napis': u'D\xd3\u0141', u'resp': u'f', u'pozycja': (-0.8, 0)},
      {u'napis': u'LEWO', u'resp': u'd', u'pozycja': (0, -0.8)},
      {u'napis': u'PRAWO', u'resp': u'd', u'pozycja': (0, -0.8)},
      {u'napis': u'G\xd3RA', u'resp': u'd', u'pozycja': (0, -0.8)},
      {u'napis': u'D\xd3\u0141', u'resp': u'd', u'pozycja': (0, -0.8)},
      {u'napis': u'LEWO', u'resp': u'j', u'pozycja': (0, 0.8)},
      {u'napis': u'PRAWO', u'resp': u'j', u'pozycja': (0, 0.8)},
      {u'napis': u'G\xd3RA', u'resp': u'j', u'pozycja': (0, 0.8)},
      {u'napis': u'D\xd3\u0141', u'resp': u'j', u'pozycja': (0, 0.8)}]
    Routine trial
    Routine kod
  LoopTerminator trials
  Routine thx
