PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = pd2
  Units = use prefs
  Screen = 1
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Routines
  Routine feedback
    CodeComponent code_2
      Begin Experiment:
        msg = ""
      Begin Routine:
        if resp.corr:
            msg = u"Poprawna odpowiedź!"
        else:
            msg = u"Niepoprawna odpowiedź"
    TextComponent text_3
      text [set every repeat] = $msg
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instrukcja
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Za chwilę poprosimy Cię o obejrzenie kilku zdjęć i zdecydowanie czy jest to pizza.

        Użyj klawiszy F (tak); J (nie)

        Proszę nacisnąć spację aby rozpocząć.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trialB
    ImageComponent image
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0
      image [set every repeat] = $zdjecie
      size = (0.5, 0.5)
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    TextComponent text_4
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        Czy na zdjęciu była pizza?

        F (tak); J (nie)
    KeyboardComponent resp
      correctAns = $odpowiedz
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 0.5
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  Routine podziekowania
    TextComponent text_5
      text = Dziękujemy za udział w badaniu. Polecamy zjeść pizzę. 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trialA
    TextComponent text_6
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_2
      text [set every repeat] = $info
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.2
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      stopVal [duration (s)] = 6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.2
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Flow
  Routine instrukcja
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pd2.xlsx
    loopType = sequential
    nReps = 3
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    conditions:
      [{u'info': u'Zaraz obejrzysz zdj\u0119cie numer 1', u'zdjecie': u'p1.jpg', u'odpowiedz': u'f'},
      {u'info': u'Zaraz obejrzysz zdj\u0119cie numer 2', u'zdjecie': u'p2.jpg', u'odpowiedz': u'f'},
      {u'info': u'Zaraz obejrzysz zdj\u0119cie numer 3', u'zdjecie': u'n.jpg', u'odpowiedz': u'j'}]
    Routine trialA
    Routine trialB
    Routine feedback
  LoopTerminator trials
  Routine podziekowania
