PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['numer osoby badanej'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [2560, 1080]
  Full-screen window = True
  Experiment info = {u'numer osoby badanej': u'001', u'numer sesji': u'1', u'r\u0119czno\u015b\u0107': u''}
  expName = drugiezadanie
  Units = use prefs
  Screen = 1
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Routines
  Routine zadanie
    TextComponent fiksacja
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Calibri
      letterHeight = 0.1
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    PolygonComponent kolo
      fillColor = $[-0.216,-0.216,-0.216]
      stopVal [duration (s)] = 0.1
      pos [set every repeat] = $pozycjakolo
      units = pix
      lineColor = $[-0.216,-0.216,-0.216]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (30, 30)
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    TextComponent text
      color = black
      text [set every repeat] = $litera
      stopVal [duration (s)] = 0.2
      pos [set every repeat] = $pozycjalitera
      startVal [time (s)] = 0.6
      font = Calibri
      letterHeight = 0.1
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    KeyboardComponent klawisz
      correctAns = $correct
      storeCorrect = True
      stopVal [duration (s)] = 0.7
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.6
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    TextComponent maska
      color = black
      text = 8
      stopVal [duration (s)] = 0.5
      pos [set every repeat] = $pozycjalitera
      startVal [time (s)] = 0.8
      font = Calibri
      letterHeight = 0.1
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  Routine podziekowania
    TextComponent text_3
      color = black
      startVal [time (s)] = 0.0
      font = Calibri
      letterHeight = 0.1
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      text:
        Dziękujemy za udział w badaniu.

        Naciśnij dowolny klawisz, aby zakończyć.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrukcja2
    TextComponent text_4
      color = black
      startVal [time (s)] = 0.0
      font = Calibri
      letterHeight = 0.1
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      text:
        Za chwilę zobaczysz litery na ekranie. Naciśnij w zależności od tego, co zobaczyłeś:

        jeśli widziałeś literę R = naciśnij strzałkę w lewo
        jeśli widziałeś literę B = naciśnij strzałkę w dół
        jeśli widziałeś literę P = naciśnij strzałkę w prawo

        Naciśnij dowolny klawisz, aby przejść części właściwej, bez informacji zwrotnych.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrukcja
    TextComponent instr
      color = black
      startVal [time (s)] = 0.0
      font = Calibri
      letterHeight = 0.1
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      text:
        Za chwilę zobaczysz litery na ekranie. Naciśnij w zależności od tego, co zobaczyłeś:

        jeśli widziałeś literę R = naciśnij strzałkę w lewo
        jeśli widziałeś literę B = naciśnij strzałkę w dół
        jeśli widziałeś literę P = naciśnij strzałkę w prawo

        Naciśnij dowolny klawisz, aby przejść do ośmiu treningowych przykładów, gdzie po każdej Twojej odpowiedzi otrzymasz informację zwrotną.
    KeyboardComponent skip
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent code
      Begin Experiment:
        odp = ''
        odpkolor = ''
      Begin Routine:
        if klawisz.corr:
            odp = u"Prawidłowa odpowiedź!"
            odpkolor = 'green'
        else:
            odp = u"Niestety, błędna odpowiedź!"
            odpkolor = 'red'
    TextComponent text_2
      color [set every repeat] = $odpkolor
      text [set every repeat] = $odp
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instrukcja
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = warunki1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'pozycjakolo': [250, 0], u'pozycjalitera': [-0.25, 0], u'litera': u'R'},
      {u'pozycjakolo': [-250, 0], u'pozycjalitera': [0.25, 0], u'litera': u'R'},
      {u'pozycjakolo': [250, 0], u'pozycjalitera': [-0.25, 0], u'litera': u'B'},
      {u'pozycjakolo': [-250, 0], u'pozycjalitera': [0.25, 0], u'litera': u'B'},
      {u'pozycjakolo': [250, 0], u'pozycjalitera': [-0.25, 0], u'litera': u'P'},
      {u'pozycjakolo': [-250, 0], u'pozycjalitera': [0.25, 0], u'litera': u'P'}]
    Routine zadanie
    Routine feedback
  LoopTerminator trials
  Routine instrukcja2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = warunki2.xlsx
    loopType = random
    nReps = 15
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    conditions:
      [{u'pozycjakolo': [250, 0], u'pozycjalitera': [-0.25, 0], u'correct': u'left', u'litera': u'R'},
      {u'pozycjakolo': [-250, 0], u'pozycjalitera': [0.25, 0], u'correct': u'left', u'litera': u'R'},
      {u'pozycjakolo': [250, 0], u'pozycjalitera': [-0.25, 0], u'correct': u'down', u'litera': u'B'},
      {u'pozycjakolo': [-250, 0], u'pozycjalitera': [0.25, 0], u'correct': u'down', u'litera': u'B'},
      {u'pozycjakolo': [250, 0], u'pozycjalitera': [-0.25, 0], u'correct': u'right', u'litera': u'P'},
      {u'pozycjakolo': [-250, 0], u'pozycjalitera': [0.25, 0], u'correct': u'right', u'litera': u'P'}]
    Routine zadanie
  LoopTerminator trials_2
  Routine podziekowania
