PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = piate
  Units = use prefs
  Screen = 1
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Routines
  Routine feedback
    CodeComponent code_2
      Begin Experiment:
        msg=''
        msgkolor=''
      Begin Routine:
        if klawisz.corr:
            msg = u"Prawidłowa odpowiedź!"
            msgkolor= 'green'
        else:
            msg = u"Niestety, niepoprawna odpowiedź!"
            msgkolor = 'red'
    TextComponent text_2
      color [set every repeat] = $msgkolor
      text [set every repeat] = $msg
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instrukcja
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Witaj w badaniu.

        Najpierw zobaczysz pojedynczy symbol na środku ekranu. Następnie pojawią się dwa (po lewej i prawej stronie). Twoim zadaniem będzie wskazanie tego, który jest identyczny z pierwotnie zobaczonym.

        Naciśnij:

        [f] jeżeli uważasz, że poprawny symbol znajduje się po lewej stronie
        [j] jeżeli uważasz, że poprawny symbol znajduje się po prawej stronie


        Naciśnij dowlony klawisz aby przejść dalej.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fikasacja_i_gabor
    CodeComponent code
      Begin Experiment:
        orient1 = ()
      Begin Routine:
        orient1 = np.random.randint(0, 360)
    TextComponent fiksacja
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    GratingComponent gabor1
      tex = sin
      stopVal [duration (s)] = 1
      mask = gauss
      units = deg
      ori [set every repeat] = $orient1
      startVal [time (s)] = 0.5
      sf = 2
      size = (5, 5)
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    TextComponent pustyekran
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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  Routine podziekowania
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Dziękujemy za udział w badnaiu.

        Naciśnij dowolny klawisz, aby zakończyć.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dwa_gabory
    CodeComponent code_3
      Begin Experiment:
        orient2 = ()
      Begin Routine:
        orient2 = orient1 + zmiana
    GratingComponent poprawny
      tex = sin
      mask = gauss
      pos [set every repeat] = $gaborpoprawny
      units = deg
      ori [set every repeat] = $orient1
      startVal [time (s)] = 0.0
      sf = 2
      size = (5, 5)
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    GratingComponent niepoprawny
      tex = sin
      mask = gauss
      pos [set every repeat] = $gaborfalszywy
      units = deg
      ori [set every repeat] = $orient2
      startVal [time (s)] = 0.0
      sf = 2
      size = (5, 5)
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    KeyboardComponent klawisz
      correctAns = $odpowiedz
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine instrukcja
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = warunki.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'odpowiedz': u'f', u'zmiana': 1L, u'gaborpoprawny': (-10, 0), u'gaborfalszywy': (10, 0)},
      {u'odpowiedz': u'f', u'zmiana': 5L, u'gaborpoprawny': (-10, 0), u'gaborfalszywy': (10, 0)},
      {u'odpowiedz': u'f', u'zmiana': 10L, u'gaborpoprawny': (-10, 0), u'gaborfalszywy': (10, 0)},
      {u'odpowiedz': u'f', u'zmiana': -1L, u'gaborpoprawny': (-10, 0), u'gaborfalszywy': (10, 0)},
      {u'odpowiedz': u'f', u'zmiana': -5L, u'gaborpoprawny': (-10, 0), u'gaborfalszywy': (10, 0)},
      {u'odpowiedz': u'f', u'zmiana': -10L, u'gaborpoprawny': (-10, 0), u'gaborfalszywy': (10, 0)},
      {u'odpowiedz': u'j', u'zmiana': -1L, u'gaborpoprawny': (10, 0), u'gaborfalszywy': (-10, 0)},
      {u'odpowiedz': u'j', u'zmiana': -5L, u'gaborpoprawny': (10, 0), u'gaborfalszywy': (-10, 0)},
      {u'odpowiedz': u'j', u'zmiana': -10L, u'gaborpoprawny': (10, 0), u'gaborfalszywy': (-10, 0)},
      {u'odpowiedz': u'j', u'zmiana': 1L, u'gaborpoprawny': (10, 0), u'gaborfalszywy': (-10, 0)},
      {u'odpowiedz': u'j', u'zmiana': 5L, u'gaborpoprawny': (10, 0), u'gaborfalszywy': (-10, 0)},
      {u'odpowiedz': u'j', u'zmiana': 10L, u'gaborpoprawny': (10, 0), u'gaborfalszywy': (-10, 0)}]
    Routine fikasacja_i_gabor
    Routine dwa_gabory
    Routine feedback
  LoopTerminator trials
  Routine podziekowania
