PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['nr'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {u'wiek': u'', u'nr': u'', u'plec': u''}
  expName = stroop1
  Save excel file = True
  Units = use prefs
  Use version = 1.84.2
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      color [set every repeat] = $kolor
      text [set every repeat] = $napis
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    KeyboardComponent resp
      correctAns = $odp
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'd','f','j','k'
      startVal [time (s)] = 0.0
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  Routine fix
    TextComponent text_4
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine koniec
    TextComponent text_2
      text = Dziękujemy!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent code_2
      Begin Experiment:
        msg=''
      Begin Routine:
        if resp.corr:
            msg=u"Poprawna odpowiedź!"
        else:
            msg=u"Niepoprawna odpowiedź"
    TextComponent text_5
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instr
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Twoim zadaniem będzie nazwanie koloru jakim będą napisane wyrazy.

        Aby przejść dalej naciśnij SPACE.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = lista.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'napis': u'\u017b\xd3\u0141TY', u'kolor': u'yellow'},
      {u'napis': u'NIEBIESKI', u'kolor': u'yellow'},
      {u'napis': u'CZERWONY', u'kolor': u'yellow'},
      {u'napis': u'ZIELONY', u'kolor': u'yellow'},
      {u'napis': u'\u017b\xd3\u0141TY', u'kolor': u'red'},
      {u'napis': u'NIEBIESKI', u'kolor': u'red'},
      {u'napis': u'CZERWONY', u'kolor': u'red'},
      {u'napis': u'ZIELONY', u'kolor': u'red'},
      {u'napis': u'\u017b\xd3\u0141TY', u'kolor': u'green'},
      {u'napis': u'NIEBIESKI', u'kolor': u'green'},
      {u'napis': u'CZERWONY', u'kolor': u'green'},
      {u'napis': u'ZIELONY', u'kolor': u'green'},
      {u'napis': u'\u017b\xd3\u0141TY', u'kolor': u'blue'},
      {u'napis': u'NIEBIESKI', u'kolor': u'blue'},
      {u'napis': u'CZERWONY', u'kolor': u'blue'},
      {u'napis': u'ZIELONY', u'kolor': u'blue'}]
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine koniec
